# Generated by Configurator on Mon May 09 14:59:22 CST 2022

# Reset
Property,Core,Initialize,0

# Devices
Device,COM6,SerialManager,COM6
Device,TIScope,NikonTI,TIScope
Device,EpiShutter,NikonTI,TIEpiShutter
Device,DiaLamp,NikonTI,TIDiaLamp
Device,NosePiece,NikonTI,TINosePiece
Device,CondenserCassette,NikonTI,TICondenserCassette
Device,FilterBlock1,NikonTI,TIFilterBlock1
Device,LightPath,NikonTI,TILightPath
Device,ZDrive,NikonTI,TIZDrive
Device,PFSOffset,NikonTI,TIPFSOffset
Device,PFSStatus,NikonTI,TIPFSStatus
Device,TUCam,TUCam,TUCam
Device,Spectra,LumencorSpectra,Spectra

# Pre-init settings for devices
Property,Spectra,Port,COM6
Property,Spectra,SetLE_Type,Spectra

# Pre-init settings for COM ports
Property,COM6,AnswerTimeout,500.0000
Property,COM6,BaudRate,9600
Property,COM6,DTR,Disable
Property,COM6,DataBits,8
Property,COM6,DelayBetweenCharsMs,0.0000
Property,COM6,Fast USB to Serial,Disable
Property,COM6,Handshaking,Off
Property,COM6,Parity,None
Property,COM6,StopBits,1
Property,COM6,Verbose,1

# Hub (parent) references
Parent,EpiShutter,TIScope
Parent,DiaLamp,TIScope
Parent,NosePiece,TIScope
Parent,CondenserCassette,TIScope
Parent,FilterBlock1,TIScope
Parent,LightPath,TIScope
Parent,ZDrive,TIScope
Parent,PFSOffset,TIScope
Parent,PFSStatus,TIScope

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,ZDrive,0
FocusDirection,PFSOffset,0

# Roles
Property,Core,Camera,TUCam
Property,Core,Focus,PFSOffset
Property,Core,AutoShutter,0

# Camera-synchronized devices

# Labels
# NosePiece
Label,NosePiece,5,6-Unknown
Label,NosePiece,4,5-Plan 40x NA 0.65 Dry
Label,NosePiece,3,4-Unknown
Label,NosePiece,2,3-Plan Apo 100x NA 1.45 Oil
Label,NosePiece,1,2-Plan Fluor 10x NA 0.30 Dry
Label,NosePiece,0,1-Plan Apo 60x NA 1.40 Oil
# CondenserCassette
Label,CondenserCassette,4,5-Ph3
Label,CondenserCassette,3,4-Ph2
Label,CondenserCassette,2,3-Ph1
Label,CondenserCassette,1,2-PhL
Label,CondenserCassette,0,1-A
# FilterBlock1
Label,FilterBlock1,5,6-RED
Label,FilterBlock1,4,5-YFPHQ
Label,FilterBlock1,3,4-HqTRI
Label,FilterBlock1,2,3-FITC
Label,FilterBlock1,1,2-DAPI
Label,FilterBlock1,0,1------
# LightPath
Label,LightPath,3,4-Left80
Label,LightPath,2,3-Right100
Label,LightPath,1,2-Left100
Label,LightPath,0,1-Eye100

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

